PsychoPy2experiment version="3.1.5"
Settings
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001', 'edad': '', 'sexo': '', 'ocupacion': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = test_emocion
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Routines
  Routine trial
    PolygonComponent c_alegria
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (-.6, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_alegria
      letterHeight = 0.075
      pos = (-.6, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Alegría
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    PolygonComponent c_tristeza
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (-.6, -.38)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_tristeza
      letterHeight = 0.075
      pos = (-.6, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tristeza
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    PolygonComponent c_enojo
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (-.2, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_enojo
      letterHeight = 0.075
      pos = (-.2, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Enojo
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    PolygonComponent c_asco
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (-.2, -.38)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_asco
      letterHeight = 0.075
      pos = (-.2, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Asco
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    PolygonComponent c_miedo
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (.2, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_miedo
      letterHeight = 0.075
      pos = (.2, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Miedo
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    PolygonComponent c_sorpresa
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (.2, -.38)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_sorpresa
      letterHeight = 0.075
      pos = (.2, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sorpresa
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    PolygonComponent c_neutral
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (.6, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_neutral
      letterHeight = 0.075
      pos = (.6, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Neutral
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    PolygonComponent c_calma
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (.6, -.38)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_calma
      letterHeight = 0.075
      pos = (.6, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Calma
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    ImageComponent rostro
      image [set every repeat] = $direccion_rostro + $emo_direccion
      pos = (0, .2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent c_ninguna
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (.6, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_ninguna
      letterHeight = 0.05
      pos = (.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ninguna
        Opción
    TextComponent pregunta
      color = yellow
      letterHeight = 0.05
      pos = (-.6, .4)
      startVal [time (s)] = 0.0
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      text:
        ¿Qué emoción muestra
        este rostro?
    MouseComponent mouse
      clickable = c_alegria, c_tristeza, c_enojo, c_asco, c_miedo, c_sorpresa, c_neutral, c_calma, c_ninguna
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = .5
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  Routine pregunta1
    ImageComponent image
      image [set every repeat] = $direccion_collage
      pos = (0, .12)
      saveStartStop = False
      size = (.85, .75)
      startVal [time (s)] = 0.0
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    TextComponent p1
      color = yellow
      letterHeight = 0.075
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Podría ser este rostro de un
        miembro de tu comunidad?
    PolygonComponent c_si
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (-.65, -.35)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_si
      letterHeight = 0.075
      pos = (-.65, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sí
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    PolygonComponent c_no
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (.65, -.35)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.125)
      startVal [time (s)] = .5
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    TextComponent t_no
      letterHeight = 0.075
      pos = (.65, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = No
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    MouseComponent mouse_2
      clickable = c_si, c_no
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = .5
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  Routine siguiente
    TextComponent t_siguiente
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = ¡Siguiente!
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  Routine Instrucciones
    TextComponent instrucciones
      color = yellow
      letterHeight = 0.05
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Se te mostrarán rostros de 45 personas distintas haciendo varias expresiones emocionales.

        Deberás seleccionar si el rostro expresa Alegría, Enojo, Miedo, Neutralidad, Tristeza, Asco, Sorpresa o Calma, o seleccionar 'Ninguna Opción' si las otras respuestas no parecen apropiadas. También deberás de responder si el rostro de la persona parece el de alguien de la comunidad en la que vives. Esto te tomará alrededor 15 minutos.

        Para responder, haz click con tu mouse sobre los recuadros que contengan la respuesta que quieres dar.
    PolygonComponent c_iniciar
      fillColor = $None
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      pos = (0, -.4)
      saveStartStop = False
      shape = rectangle
      size = (0.32, 0.125)
      startVal [time (s)] = .5
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    MouseComponent mouse_3
      clickable = c_iniciar
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = .5
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    TextComponent t_iniciar
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = .5
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      text:
        ¡Click para
        Iniciar!
  Routine Gracias
    TextComponent fin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2.5
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      text:
        Fin

        ¡Gracias por Participar!
Flow
  Routine Instrucciones
  LoopInitiator bloques loopType="TrialHandler"
    conditionsFile = g1_bloques.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('bloque', 1), ('rostro_num', 62), ('rostro_tipo', 'WF01'), ('direccion_rostro', './WF01_'), ('direccion_collage', './WF01.jpg')]),
      OrderedDict([('bloque', 2), ('rostro_num', 41), ('rostro_tipo', 'HF01'), ('direccion_rostro', './HF01_'), ('direccion_collage', './HF01.jpg')]),
      OrderedDict([('bloque', 3), ('rostro_num', 53), ('rostro_tipo', 'HM04'), ('direccion_rostro', './HM04_'), ('direccion_collage', './HM04.jpg')]),
      OrderedDict([('bloque', 4), ('rostro_num', 78), ('rostro_tipo', 'WM02'), ('direccion_rostro', './WM02_'), ('direccion_collage', './WM02.jpg')]),
      OrderedDict([('bloque', 5), ('rostro_num', 67), ('rostro_tipo', 'WF06'), ('direccion_rostro', './WF06_'), ('direccion_collage', './WF06.jpg')]),
      OrderedDict([('bloque', 6), ('rostro_num', 72), ('rostro_tipo', 'WF11'), ('direccion_rostro', './WF11_'), ('direccion_collage', './WF11.jpg')]),
      OrderedDict([('bloque', 7), ('rostro_num', 88), ('rostro_tipo', 'WM12'), ('direccion_rostro', './WM12_'), ('direccion_collage', './WM12.jpg')]),
      OrderedDict([('bloque', 8), ('rostro_num', 44), ('rostro_tipo', 'HF04'), ('direccion_rostro', './HF04_'), ('direccion_collage', './HF04.jpg')]),
      OrderedDict([('bloque', 9), ('rostro_num', 43), ('rostro_tipo', 'HF03'), ('direccion_rostro', './HF03_'), ('direccion_collage', './HF03.jpg')]),
      OrderedDict([('bloque', 10), ('rostro_num', 48), ('rostro_tipo', 'HF09'), ('direccion_rostro', './HF09_'), ('direccion_collage', './HF09.jpg')])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
    Routine siguiente
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trials_emo.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('emo_num', 1), ('emo_tipo', 'HO')]),
        OrderedDict([('emo_num', 2), ('emo_tipo', 'SC')]),
        OrderedDict([('emo_num', 3), ('emo_tipo', 'AO')]),
        OrderedDict([('emo_num', 4), ('emo_tipo', 'DO')]),
        OrderedDict([('emo_num', 5), ('emo_tipo', 'FO')]),
        OrderedDict([('emo_num', 6), ('emo_tipo', 'SUR')]),
        OrderedDict([('emo_num', 7), ('emo_tipo', 'NC')]),
        OrderedDict([('emo_num', 8), ('emo_tipo', 'CC')])]
      Routine trial
    LoopTerminator trials
    Routine pregunta1
  LoopTerminator bloques
  Routine Gracias
